/*
Extracellular recording from model subjected to extracellular stimulation

Modified from source files created by Ted
Vijay Sadashivaiah, Neuromedical Control Systems Lab
Johns Hopkins University
*/


load_file("nrngui.hoc")
load_file("cell.ses") // specifies anatomical and biophysical properties of the cell
load_file("anatscale.hoc")	// show xyz scale bars
load_file("interpxyz.hoc")	// only interpolates sections that have extracellular
load_file("setpointers.hoc")	// automatically calls grindaway() in interpxyz.hoc
load_file("rigc.ses")		// RunControl, graphs of v, vext, e_extracellular
load_file("rigxc.ses")		// graph of er_xtra, just for diagnostic|development purposes
load_file("field.hoc")		// computes extracellularly recorded potential vrec
load_file("vrecc.ses")		// graph of vrec(t)
load_file("calcrxc.hoc")	// computes transfer r between segments and recording electrodes
load_file("vstim_new.hoc")		// extracellular stimulus
load_file("msgxc.hoc")
load_file("revMRGaxon.hoc")